{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "modeCDCOM": "False", 
                "parsCDCOM": "", 
                "phantomversion": "3.2"
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "MG/CDMAM for Philips MicrodoseL50", 
        "version": "20170802"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "qc_series": {
            "params": {
                "modeCDCOM": "use precompiled cdcom.exe for detection or use python implementation", 
                "parsCDCOM": "use extra flags for cdcom.exe, e.g use \"c;high\" to pass \"c\" and \"high\"", 
                "phantomversion": "either 3.2 or 3.4"
            }
        }
    }
}